OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 16575
#0.Signal stream -> Signal Resampling
  New Sampling Frequency = 256
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 14
-> Signal average => #3
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 250
  Vertical Offset = 0
  Time Scale = 0.5
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#3 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
